PsychoPy2experiment version="2021.1.2"
Settings
  Data file delimiter = tab
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2021.1.2
  Window size (pixels) = [1536, 864]
  color = $[-1,-1,-1]
  expName = spr_task
  logging level = debug
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Routines
  Routine s1
    TextComponent text_s1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $S1
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    KeyboardComponent key_resp_s1
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine q1
    TextComponent text_q1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Felicitaron los jueces al participante?

        <— Sí.       No. —>
    KeyboardComponent resp_q1
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb1
    CodeComponent message_fb1
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp_q1.corr:#stored on last run routine
          msg="CORRECTO"
        else:
          msg="INCORRECTO"
    TextComponent text_fb1
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine inst
    TextComponent text
      color = Yellow
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Instrucciones

        Cada oración se presentará en el centro de la pantalla precedida de una cruz de fijación (+) y seguida de una pregunta.

        Lee las oraciones comprensiblemente tan rápido como sea posible, presionando la “barra espaciadora” para ver la próxima palabra.

        Al final de la oración, responde la pregunta, presionando la “flecha izquierda” del teclado para indicar “Sí” y la “flecha derecha” para indicar “No”.

        Antes de comenzar, posiciona la mano izquierda sobre la “barra espaciadora” y los dedos índice y anular de la mano derecha sobre las teclas izquierda y derecha, respectivamente.

        Si tienes alguna duda, por favor, consulta al investigador responsable.

        Si estás preparada/o, presiona “Enter” para iniciar la sesión de práctica.
    KeyboardComponent key_resp
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine f1
    TextComponent text_f1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $F1
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    KeyboardComponent key_resp_f1
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine qf1
    TextComponent text_qf1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Tienen Juan y Pedro 40 años?

        <— Sí.       No. —>
    KeyboardComponent resp_qf1
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fbf1
    CodeComponent message_fbf1
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp_qf1.corr:#stored on last run routine
          msg="CORRECTO"
        else:
          msg="INCORRECTO"
    TextComponent text_fbf1
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine pausa
    TextComponent text_pausa
      color = yellow
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine s2
    TextComponent text_s2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $S2
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    KeyboardComponent key_resp_s2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine q2
    TextComponent text_q2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Criticaron los jueces al participante?

        <— Sí.       No. —>
    KeyboardComponent resp_q2
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb2
    CodeComponent message_fb2
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp_q2.corr:#stored on last run routine
          msg="CORRECTO"
        else:
          msg="INCORRECTO"
    TextComponent text_fb2
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine s10
    TextComponent text_s10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $S10
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    KeyboardComponent key_resp_s10
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine q10
    TextComponent text_q10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Criticaron los jueces al participante?

        <— Sí.       No. —>
    KeyboardComponent resp_q10
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb10
    CodeComponent message_fb10
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp_q10.corr:#stored on last run routine
          msg="CORRECTO"
        else:
          msg="INCORRECTO"
    TextComponent text_fb10
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine f2
    TextComponent text_f2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $F2
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    KeyboardComponent key_resp_f2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine qf2
    TextComponent text_qf2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Tienen Juan y Andrés 15 años?

        <— Sí.       No. —>
    KeyboardComponent resp_qf2
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fbf2
    CodeComponent message_fbf2
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp_qf2.corr:#stored on last run routine
          msg="CORRECTO"
        else:
          msg="INCORRECTO"
    TextComponent text_fbf2
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine s19
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  Routine q19
    TextComponent text_q19
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Reprocharon los legisladores al senador?

        <— Sí.       No. —>
    KeyboardComponent resp_q19
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb19
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  Routine f3
    TextComponent text_f3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $F3
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    KeyboardComponent key_resp_f3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine qf3
    TextComponent text_qf3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Estudian Helena y María pocas horas?

        <— Sí.       No. —>
    KeyboardComponent resp_qf3
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fbf3
    CodeComponent message_fbf3
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp_qf3.corr:#stored on last run routine
          msg="CORRECTO"
        else:
          msg="INCORRECTO"
    TextComponent text_fbf3
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine s28
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  Routine q28
    TextComponent text_q28
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Reprochó el senador a los legisladores?

        <— Sí.       No. —>
    KeyboardComponent resp_q28
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb28
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  Routine f4
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  Routine qf4
    TextComponent text_qf4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Practican Pablo y Patricia poco deporte?

        <— Sí.       No. —>
    KeyboardComponent resp_qf4
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fbf4
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  Routine s5
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  Routine q5
    TextComponent text_q5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Elogiaron los expertos al abogado?

        <— Sí.       No. —>
    KeyboardComponent resp_q5
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb5
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  Routine f5
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  Routine qf5
    TextComponent text_qf5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Tienen Tomás y Mario 30 años?

        <— Sí.       No. —>
    KeyboardComponent resp_qf5
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fbf5
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  Routine s15
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  Routine q15
    TextComponent text_q15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Halagaron los científicos al investigador?

        <— Sí.       No. —>
    KeyboardComponent resp_q15
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb15
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  Routine f6
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  Routine qf6
    TextComponent text_qf6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Tienen Luis y Ana 10 años?

        <— Sí.       No. —>
    KeyboardComponent resp_qf6
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fbf6
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  Routine s7
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  Routine q7
    TextComponent text_q7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Halagaron los fanáticos al cantante?

        <— Sí.       No. —>
    KeyboardComponent resp_q7
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb7
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  Routine f7
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  Routine qf7
    TextComponent text_qf7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Toman Sofía y Laura mucho sol?

        <— Sí.       No. —>
    KeyboardComponent resp_qf7
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fbf7
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  Routine s23
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  Routine q23
    TextComponent text_q23
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Ofendieron los fanáticos al delantero?

        <— Sí.       No. —>
    KeyboardComponent resp_q23
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb23
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  Routine s9
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $S9
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    KeyboardComponent key_resp_s9
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine q9
    TextComponent text_q9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Felicitaron los jueces al participante?

        <— Sí.       No. —>
    KeyboardComponent resp_q9
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb9
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  Routine s18
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  Routine f18
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  Routine fb18
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  Routine s27
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  Routine q27
    TextComponent text_q27
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Reprocharon los legisladores al senador?

        <— Sí.       No. —>
    KeyboardComponent resp_q27
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb27
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  Routine s4
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  Routine q4
    TextComponent text_q4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Valoró el tenista a los jugadores?

        <— Sí.       No. —>
    KeyboardComponent resp_q4
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb4
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  Routine s13
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  Routine q13
    TextComponent text_q13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Elogiaron los abogados al ladrón?

        <— Sí.       No. —>
    KeyboardComponent resp_q13
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb13
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  Routine s6
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  Routine q6
    TextComponent text_q6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Reprocharon los expertos al abogado?

        <— Sí.       No. —>
    KeyboardComponent resp_q6
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb6
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  Routine s22
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  Routine q22
    TextComponent text_q22
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Halagaron los sospechosos al testigo?

        <— Sí.       No. —>
    KeyboardComponent resp_q22
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb22
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  Routine s8
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  Routine f8
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  Routine fb8
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  Routine s17
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  Routine q17
    TextComponent text_q17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Criticaron los jueces al boxeador?

        <— Sí.       No. —>
    KeyboardComponent resp_q17
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb17
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  Routine s26
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  Routine q26
    TextComponent text_q26
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Felicitaron los jueces al boxeador?

        <— Sí.       No. —>
    KeyboardComponent resp_q26
      allowedKeys = 'left','right'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine fb26
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  Routine s3
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  Routine q3
    TextComponent text_q3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Valoraron los jugadores al tenista?

        <— Sí.       No. —>
    KeyboardComponent resp_q3
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb3
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  Routine s12
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  Routine q12
    TextComponent text_q12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Valoró el tenista a los jugadores?

        <— Sí.       No. —>
    KeyboardComponent resp_q12
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb12
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  Routine s21
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  Routine q21
    TextComponent text_q21
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Insultaron los sospechosos al testigo?

        <— Sí.       No. —>
    KeyboardComponent resp_q21
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb21
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  Routine s30
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  Routine q30
    TextComponent text_q30
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Halagaron los sospechosos al testigo?

        <— Sí.       No. —>
    KeyboardComponent resp_q30
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb30
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  Routine s14
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  Routine s32
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  Routine f9
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  Routine f10
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  Routine f11
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  Routine f12
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  Routine f13
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  Routine f14
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  Routine s31
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  Routine f15
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  Routine FIN_BLOQUE
    TextComponent texto_bloque1_pausa
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 40
      text = PAUSA DE 40 SEGUNDOS…
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  Routine s16
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  Routine s25
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  Routine s11
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  Routine s20
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  Routine s29
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  Routine s24
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  Routine f16
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  Routine f17
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  Routine f19
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  Routine f20
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  Routine f21
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  Routine f22
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  Routine f23
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  Routine f24
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  Routine f25
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  Routine f26
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  Routine f27
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  Routine f28
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  Routine f29
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  Routine f30
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  Routine f31
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  Routine f32
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  Routine q32
    TextComponent text_q32
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Ofendió el delantero a los fanáticos?

        <— Sí.       No. —>
    KeyboardComponent resp_q32
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf8
    TextComponent text_qf8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Escriben Carlos y Felipe malas novelas?

        <— Sí.       No. —>
    KeyboardComponent resp_qf8
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf9
    TextComponent text_qf9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Tienen Juan y Pedro 40 años?

        <— Sí.       No. —>
    KeyboardComponent resp_qf9
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine q18
    TextComponent text_q18
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Felicitaron los jueces al boxeador?

        <— Sí.       No. —>
    KeyboardComponent resp_q18
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf10
    TextComponent text_qf10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿LLevan José y Andrés una vida activa?

        <— Sí.       No. —>
    KeyboardComponent resp_qf10
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf11
    TextComponent text_qf11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Estudian Helena y María pocas horas?

        <— Sí.       No. —>
    KeyboardComponent resp_qf11
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf12
    TextComponent text_qf12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Practican Pablo y Patricia poco deporte?

        <— Sí.       No. —>
    KeyboardComponent resp_qf12
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf13
    TextComponent text_qf13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Tienen Tomás y Mario 30 años?

        <— Sí.       No. —>
    KeyboardComponent resp_qf13
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf14
    TextComponent text_qf14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Miran Luis y Ana telenovelas?

        <— Sí.       No. —>
    KeyboardComponent resp_qf14
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine q31
    TextComponent text_q31
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Ofendieron los fanáticos al delantero?

        <— Sí.       No. —>
    KeyboardComponent resp_q31
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf15
    TextComponent text_qf15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Toman Sofía y Laura mucho sol?

        <— Sí.       No. —>
    KeyboardComponent resp_qf15
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine q8
    TextComponent text_q8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Halagó el cantante a los fanáticos?

        <— Sí.       No. —>
    KeyboardComponent resp_q8
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf16
    TextComponent text_qf16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Escriben Carlos y Felipe malas novelas?

        <— Sí.       No. —>
    KeyboardComponent resp_qf16
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf17
    TextComponent text_qf17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Llevan Juan y Pedro una vida modesta?

        <— Sí.       No. —>
    KeyboardComponent resp_qf17
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf18
    TextComponent text_qf18
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Tienen José y Andrés 15 años?

        <— Sí.       No. —>
    KeyboardComponent resp_qf18
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf19
    TextComponent text_qf19
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Estudian Helena y María pocas horas?

        <— Sí.       No. —>
    KeyboardComponent resp_qf19
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf20
    TextComponent text_qf20
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Practican Pablo y Patricia poco deporte?

        <— Sí.       No. —>
    KeyboardComponent resp_qf20
      allowedKeys = 'left', 'right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf21
    TextComponent text_qf21
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Tienen Tomás y Mario talento?

        <— Sí.       No. —>
    KeyboardComponent resp_qf21
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf22
    TextComponent text_qf22
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Miran Luis y Ana telenovelas?

        <— Sí.       No. —>
    KeyboardComponent resp_qf22
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf23
    TextComponent text_qf23
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Toman Sofía y Laura mucho sol?

        <— Sí.       No. —>
    KeyboardComponent resp_qf23
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine q16
    TextComponent text_q16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Halagó el investigador a los científicos?

        <— Sí.       No. —>
    KeyboardComponent resp_q16
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf24
    TextComponent text_qf24
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Escriben Carlos y Felipe malas novelas?

        <— Sí.       No. —>
    KeyboardComponent resp_qf24
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine q25
    TextComponent text_q25
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Criticaron los jueces al boxeador?

        <— Sí.       No. —>
    KeyboardComponent resp_q25
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf25
    TextComponent text_qf25
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Llevan Juan y Pedro una vida modesta?

        <— Sí.       No. —>
    KeyboardComponent resp_qf25
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf26
    TextComponent text_gf26
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Tienen José y Andrés 15 años?

        <— Sí.       No. —>
    KeyboardComponent resp_qf26
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine q11
    TextComponent text_q11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Valoraron los jugadores al tenista?

        <— Sí.       No. —>
    KeyboardComponent resp_q11
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf27
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  Routine q20
    TextComponent text_q20
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Reprochó el senador a los legisladores?

        <— Sí.       No. —>
    KeyboardComponent resp_q20
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf28
    TextComponent text_gf28
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Practican Pablo y Patricia poco deporte?

        <— Sí.       No. —>
    KeyboardComponent resp_qf28
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine q29
    TextComponent text_q29
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Insultaron los sospechosos al testigo?

        <— Sí.       No. —>
    KeyboardComponent resp_q29
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf29
    TextComponent text_gf29
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Tienen Tomás y Mario talento?

        <— Sí.       No. —>
    KeyboardComponent resp_qf29
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf30
    TextComponent text_gf30
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Tienen Luis y Ana 15 años?

        <— Sí.       No. —>
    KeyboardComponent resp_qf30
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf31
    TextComponent text_gf31
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Toman Sofía y Laura mucho sol?

        <— Sí.       No. —>
    KeyboardComponent resp_qf31
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine q24
    TextComponent text_q24
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Ofendió el delantero a los fanáticos?

        <— Sí.       No. —>
    KeyboardComponent resp_q24
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine qf32
    TextComponent text_gf32
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Escriben Carlos y Felipe malas novelas?

        <— Sí.       No. —>
    KeyboardComponent resp_qf32
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine q14
    TextComponent text_q14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Reprocharon los abogados al ladrón?

        <— Sí.       No. —>
    KeyboardComponent resp_q14
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fb14
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  Routine fb32
    CodeComponent message_f32
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp_q32.corr:#stored on last run routine
          msg="CORRECTO"
        else:
          msg="INCORRECTO"
    TextComponent text_fb32
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine fbf8
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  Routine fbf9
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  Routine fbf10
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  Routine fbf11
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  Routine fbf12
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  Routine fbf13
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  Routine fbf14
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  Routine fb31
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  Routine fbf15
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  Routine fbf16
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  Routine fbf17
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  Routine fbf18
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  Routine fbf19
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  Routine fbf20
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  Routine fbf21
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  Routine fbf22
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  Routine fbf23
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  Routine fb16
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  Routine fbf24
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  Routine fb25
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  Routine fbf25
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  Routine fbf26
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  Routine fb11
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  Routine fbf27
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  Routine fb20
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  Routine fbf28
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  Routine fb29
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  Routine fbf29
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  Routine fbf30
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  Routine fbf31
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  Routine fb24
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  Routine fbf32
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  Routine training1
    TextComponent text_training1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $T1
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    KeyboardComponent resp_training1
      allowedKeys = 'space'
      correctAns = $corrAns_training
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine qtraining1
    TextComponent text_qtraining1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Ignoró el senador al presidente?

        <— Sí.       No. —>
    KeyboardComponent resp_qtraining1
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fbtraining1
    CodeComponent message_qtraining1
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp_qtraining1.corr:#stored on last run routine
          msg="CORRECTO"
        else:
          msg="INCORRECTO"
    TextComponent text_fbtraining1
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine qtraining2
    TextComponent text_qtraining2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Amenazó el criminal al juez?

        <— Sí.       No. —>
    KeyboardComponent resp_qtraining2
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fbtraining2
    CodeComponent message_qtraining2
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp_qtraining2.corr:#stored on last run routine
          msg="CORRECTO"
        else:
          msg="INCORRECTO"
    TextComponent text_fbtraining2
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine training3
    TextComponent text_training3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $T3
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    KeyboardComponent resp_training3
      allowedKeys = 'space'
      correctAns = $corrAns_training
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine qtraining3
    TextComponent text_qtraining3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Avistó el granjero el objeto volador?

        <— Sí.       No. —>
    KeyboardComponent resp_qtraining3
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fbtraining3
    CodeComponent message_fbtraining3
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp_qtraining3.corr:#stored on last run routine
          msg="CORRECTO"
        else:
          msg="INCORRECTO"
    TextComponent text_fbtraining3
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine training4
    TextComponent text_training4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $T4
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    KeyboardComponent resp_training4
      allowedKeys = 'space'
      correctAns = $corrAns_training
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine qtraining4
    TextComponent text_qtraining4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¿Habló el pasajero con el piloto?

        <— Sí.       No. —>
    KeyboardComponent resp_qtraining4
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine fbtraining4
    CodeComponent message_fbtraining4
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp_qtraining4.corr:#stored on last run routine
          msg="CORRECTO"
        else:
          msg="INCORRECTO"
    TextComponent text_fbtraining4
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine inst1
    TextComponent text_inst1
      color = Yellow
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Instrucciones

        Cada oración se presentará en el centro de la pantalla precedida de una cruz de fijación (+) y seguida de una pregunta. Lee las oraciones comprensiblemente tan rápido como sea posible, presionando la “barra espaciadora” para ver la próxima palabra.

        Al final de la oración, responde la pregunta, presionando la “flecha izquierda” del teclado para indicar “Sí” y la “flecha derecha” para indicar “No”.

        Antes de comenzar, posiciona la mano izquierda sobre la “barra espaciadora” y los dedos índice y anular de la mano derecha sobre las teclas izquierda y derecha, respectivamente.

        Si tienes alguna duda, por favor, consulta al investigador responsable.

        Si estás preparada/o, presiona “Enter” para iniciar la sesión de práctica.
    KeyboardComponent key_resp_inst1
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine end_training
    TextComponent text_end_training
      color = Yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        La etapa de entrenamiento ha finalizado con éxito.

        Presiona "Enter" para continuar.
    KeyboardComponent key_resp_end_training
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine end_exp
    TextComponent text_end_exp
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Fin del experimento.

        Muchas gracias por tu participación.
  Routine continuar_exp
    TextComponent cont_exp
      color = yellow
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Presiona "Enter" para iniciar el siguiente bloque.
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    KeyboardComponent key_resp_cont_exp
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine trial
    TextComponent text_0
      color = Yellow
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        ¡Bienvenido al Experimento!

        En este experimento debes leer oraciones en la pantalla del computador y responder una pregunta (Sí o No) al final de cada oración.

        Las palabras de cada oración aparecerán una a una en el centro de la pantalla precedidas de una cruz de fijación (+) cada vez que presiones la barra espaciadora.

        En total verás 64 oraciones y 64 preguntas y demorarás alrededor de 20 minutos en completar la tarea.

        Antes de comenzar, realizarás una breve sesión de práctica. Si estás preparada/o para comenzar la sesión de práctica, presiona “Enter” para continuar.
    KeyboardComponent key_resp_0
      allowedKeys = 'space','return'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine training2
    TextComponent text_training2_
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $T2
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    KeyboardComponent resp_training2
      allowedKeys = 'space'
      correctAns = $corrAns_training
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine text_training2
    TextComponent text_training1_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $T1
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    KeyboardComponent resp_training1_2
      allowedKeys = 'space'
      correctAns = $corrAns_training
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine text_training2_2
    TextComponent text_training1_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $T1
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    KeyboardComponent resp_training1_3
      allowedKeys = 'space'
      correctAns = $corrAns_training
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine text_2
    TextComponent text_training1_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $T1
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    KeyboardComponent resp_training1_4
      allowedKeys = 'space'
      correctAns = $corrAns_training
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine trial
  Routine inst
  Routine pausa
  LoopInitiator trials_129 loopType="TrialHandler"
    conditionsFile = training/t1.xlsx
    loopType = sequential
    nReps = 1
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    Routine training1
  LoopTerminator trials_129
  LoopInitiator trials_130 loopType="TrialHandler"
    conditionsFile = corrAns_training/corrAns1.xlsx
    loopType = sequential
    nReps = 1
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    Routine qtraining1
    Routine fbtraining1
  LoopTerminator trials_130
  Routine pausa
  LoopInitiator trials_131 loopType="TrialHandler"
    conditionsFile = training/t2.xlsx
    loopType = sequential
    nReps = 1
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    Routine training2
  LoopTerminator trials_131
  LoopInitiator trials_132 loopType="TrialHandler"
    conditionsFile = corrAns_training/corrAns2.xlsx
    loopType = sequential
    nReps = 1
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    Routine qtraining2
    Routine fbtraining2
  LoopTerminator trials_132
  Routine pausa
  LoopInitiator trials_133 loopType="TrialHandler"
    conditionsFile = training/t3.xlsx
    loopType = sequential
    nReps = 1
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    Routine training3
  LoopTerminator trials_133
  LoopInitiator trials_134 loopType="TrialHandler"
    conditionsFile = corrAns_training/corrAns3.xlsx
    loopType = sequential
    nReps = 1
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    Routine qtraining3
    Routine fbtraining3
  LoopTerminator trials_134
  Routine pausa
  LoopInitiator trials_135 loopType="TrialHandler"
    conditionsFile = training/t4.xlsx
    loopType = sequential
    nReps = 1
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    Routine training4
  LoopTerminator trials_135
  LoopInitiator trials_136 loopType="TrialHandler"
    conditionsFile = corrAns_training/corrAns4.xlsx
    loopType = sequential
    nReps = 1
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    Routine qtraining4
    Routine fbtraining4
  LoopTerminator trials_136
  Routine end_training
  Routine inst1
  Routine pausa
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stims/s1.xlsx
    loopType = sequential
    nReps = 1
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    Routine s1
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns1.xlsx
    loopType = sequential
    nReps = 1
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    Routine q1
    Routine fb1
  LoopTerminator trials_2
  Routine pausa
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = Fillers_single/F1.xlsx
    loopType = sequential
    nReps = 1
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    Routine f1
  LoopTerminator trials_3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns1.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf1
    Routine fbf1
  LoopTerminator trials_4
  Routine pausa
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = stims/s10.xlsx
    loopType = sequential
    nReps = 1
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    Routine s10
  LoopTerminator trials_5
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns10.xlsx
    loopType = sequential
    nReps = 1
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    Routine q10
    Routine fb10
  LoopTerminator trials_6
  Routine pausa
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = Fillers_single/F2.xlsx
    loopType = sequential
    nReps = 1
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    Routine f2
  LoopTerminator trials_7
  LoopInitiator trials_8 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns2.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf2
    Routine fbf2
  LoopTerminator trials_8
  Routine pausa
  LoopInitiator trials_9 loopType="TrialHandler"
    conditionsFile = stims/s19.xlsx
    loopType = sequential
    nReps = 1
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    Routine s19
  LoopTerminator trials_9
  LoopInitiator trials_10 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns19.xlsx
    loopType = sequential
    nReps = 1
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    Routine q19
    Routine fb19
  LoopTerminator trials_10
  Routine pausa
  LoopInitiator trials_11 loopType="TrialHandler"
    conditionsFile = Fillers_single/F3.xlsx
    loopType = sequential
    nReps = 1
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    Routine f3
  LoopTerminator trials_11
  LoopInitiator trials_12 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns3.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf3
    Routine fbf3
  LoopTerminator trials_12
  Routine pausa
  LoopInitiator trials_13 loopType="TrialHandler"
    conditionsFile = stims/s28.xlsx
    loopType = sequential
    nReps = 1
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    Routine s28
  LoopTerminator trials_13
  LoopInitiator trials_14 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns28.xlsx
    loopType = sequential
    nReps = 1
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    Routine q28
    Routine fb28
  LoopTerminator trials_14
  Routine pausa
  LoopInitiator trials_15 loopType="TrialHandler"
    conditionsFile = Fillers_single/F4.xlsx
    loopType = sequential
    nReps = 1
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    Routine f4
  LoopTerminator trials_15
  LoopInitiator trials_16 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns4.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf4
    Routine fbf4
  LoopTerminator trials_16
  Routine pausa
  LoopInitiator trials_17 loopType="TrialHandler"
    conditionsFile = stims/s5.xlsx
    loopType = sequential
    nReps = 1
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    Routine s5
  LoopTerminator trials_17
  LoopInitiator trials_18 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns5.xlsx
    loopType = sequential
    nReps = 1
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    Routine q5
    Routine fb5
  LoopTerminator trials_18
  Routine pausa
  LoopInitiator trials_19 loopType="TrialHandler"
    conditionsFile = Fillers_single/F5.xlsx
    loopType = sequential
    nReps = 1
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    Routine f5
  LoopTerminator trials_19
  LoopInitiator trials_20 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns5.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf5
    Routine fbf5
  LoopTerminator trials_20
  Routine pausa
  LoopInitiator trials_21 loopType="TrialHandler"
    conditionsFile = stims/s14.xlsx
    loopType = sequential
    nReps = 1
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    Routine s14
  LoopTerminator trials_21
  LoopInitiator trials_52 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns14.xlsx
    loopType = sequential
    nReps = 1
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    Routine q14
    Routine fb14
  LoopTerminator trials_52
  Routine pausa
  LoopInitiator trials_23 loopType="TrialHandler"
    conditionsFile = Fillers_single/F6.xlsx
    loopType = sequential
    nReps = 1
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    Routine f6
  LoopTerminator trials_23
  LoopInitiator trials_24 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns6.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf6
    Routine fbf6
  LoopTerminator trials_24
  Routine pausa
  LoopInitiator trials_22 loopType="TrialHandler"
    conditionsFile = stims/s23.xlsx
    loopType = sequential
    nReps = 1
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    Routine s23
  LoopTerminator trials_22
  LoopInitiator trials_53 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns23.xlsx
    loopType = sequential
    nReps = 1
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    Routine q23
    Routine fb23
  LoopTerminator trials_53
  Routine pausa
  LoopInitiator trials_27 loopType="TrialHandler"
    conditionsFile = Fillers_single/F7.xlsx
    loopType = sequential
    nReps = 1
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    Routine f7
  LoopTerminator trials_27
  LoopInitiator trials_28 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns7.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf7
    Routine fbf7
  LoopTerminator trials_28
  Routine pausa
  LoopInitiator trials_25 loopType="TrialHandler"
    conditionsFile = stims/s32.xlsx
    loopType = sequential
    nReps = 1
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    Routine s32
  LoopTerminator trials_25
  LoopInitiator trials_54 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns32.xlsx
    loopType = sequential
    nReps = 1
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    Routine q32
    Routine fb32
  LoopTerminator trials_54
  Routine pausa
  LoopInitiator trials_79 loopType="TrialHandler"
    conditionsFile = Fillers_single/F8.xlsx
    loopType = sequential
    nReps = 1
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    Routine f8
  LoopTerminator trials_79
  LoopInitiator trials_104 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns8.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf8
    Routine fbf8
  LoopTerminator trials_104
  Routine FIN_BLOQUE
  Routine continuar_exp
  Routine pausa
  LoopInitiator trials_26 loopType="TrialHandler"
    conditionsFile = stims/s9.xlsx
    loopType = sequential
    nReps = 1
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    Routine s9
  LoopTerminator trials_26
  LoopInitiator trials_55 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns9.xlsx
    loopType = sequential
    nReps = 1
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    Routine q9
    Routine fb9
  LoopTerminator trials_55
  Routine pausa
  LoopInitiator trials_80 loopType="TrialHandler"
    conditionsFile = Fillers_single/F9.xlsx
    loopType = sequential
    nReps = 1
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    Routine f9
  LoopTerminator trials_80
  LoopInitiator trials_105 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns9.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf9
    Routine fbf9
  LoopTerminator trials_105
  Routine pausa
  LoopInitiator trials_29 loopType="TrialHandler"
    conditionsFile = stims/s18.xlsx
    loopType = sequential
    nReps = 1
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    Routine s18
  LoopTerminator trials_29
  LoopInitiator trials_56 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns18.xlsx
    loopType = sequential
    nReps = 1
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    Routine q18
    Routine fb18
  LoopTerminator trials_56
  Routine pausa
  LoopInitiator trials_81 loopType="TrialHandler"
    conditionsFile = Fillers_single/F10.xlsx
    loopType = sequential
    nReps = 1
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    Routine f10
  LoopTerminator trials_81
  LoopInitiator trials_106 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns10.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf10
    Routine fbf10
  LoopTerminator trials_106
  Routine pausa
  LoopInitiator trials_30 loopType="TrialHandler"
    conditionsFile = stims/s27.xlsx
    loopType = sequential
    nReps = 1
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    Routine s27
  LoopTerminator trials_30
  LoopInitiator trials_57 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns27.xlsx
    loopType = sequential
    nReps = 1
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    Routine q27
    Routine fb27
  LoopTerminator trials_57
  Routine pausa
  LoopInitiator trials_82 loopType="TrialHandler"
    conditionsFile = Fillers_single/F11.xlsx
    loopType = sequential
    nReps = 1
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    Routine f11
  LoopTerminator trials_82
  LoopInitiator trials_107 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns11.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf11
    Routine fbf11
  LoopTerminator trials_107
  Routine pausa
  LoopInitiator trials_31 loopType="TrialHandler"
    conditionsFile = stims/s4.xlsx
    loopType = sequential
    nReps = 1
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    Routine s4
  LoopTerminator trials_31
  LoopInitiator trials_58 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns4.xlsx
    loopType = sequential
    nReps = 1
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    Routine q4
    Routine fb4
  LoopTerminator trials_58
  Routine pausa
  LoopInitiator trials_83 loopType="TrialHandler"
    conditionsFile = Fillers_single/F12.xlsx
    loopType = sequential
    nReps = 1
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    Routine f12
  LoopTerminator trials_83
  LoopInitiator trials_108 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns12.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf12
    Routine fbf12
  LoopTerminator trials_108
  Routine pausa
  LoopInitiator trials_32 loopType="TrialHandler"
    conditionsFile = stims/s13.xlsx
    loopType = sequential
    nReps = 1
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    Routine s13
  LoopTerminator trials_32
  LoopInitiator trials_59 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns13.xlsx
    loopType = sequential
    nReps = 1
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    Routine q13
    Routine fb13
  LoopTerminator trials_59
  Routine pausa
  LoopInitiator trials_84 loopType="TrialHandler"
    conditionsFile = Fillers_single/F13.xlsx
    loopType = sequential
    nReps = 1
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    Routine f13
  LoopTerminator trials_84
  LoopInitiator trials_109 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns13.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf13
    Routine fbf13
  LoopTerminator trials_109
  Routine pausa
  LoopInitiator trials_33 loopType="TrialHandler"
    conditionsFile = stims/s22.xlsx
    loopType = sequential
    nReps = 1
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    Routine s22
  LoopTerminator trials_33
  LoopInitiator trials_60 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns22.xlsx
    loopType = sequential
    nReps = 1
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    Routine q22
    Routine fb22
  LoopTerminator trials_60
  Routine pausa
  LoopInitiator trials_85 loopType="TrialHandler"
    conditionsFile = Fillers_single/F14.xlsx
    loopType = sequential
    nReps = 1
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    Routine f14
  LoopTerminator trials_85
  LoopInitiator trials_110 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns14.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf14
    Routine fbf14
  LoopTerminator trials_110
  Routine pausa
  LoopInitiator trials_34 loopType="TrialHandler"
    conditionsFile = stims/s31.xlsx
    loopType = sequential
    nReps = 1
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    Routine s31
  LoopTerminator trials_34
  LoopInitiator trials_61 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns31.xlsx
    loopType = sequential
    nReps = 1
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    Routine q31
    Routine fb31
  LoopTerminator trials_61
  Routine pausa
  LoopInitiator trials_86 loopType="TrialHandler"
    conditionsFile = Fillers_single/F15.xlsx
    loopType = sequential
    nReps = 1
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    Routine f15
  LoopTerminator trials_86
  LoopInitiator trials_111 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns15.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf15
    Routine fbf15
  LoopTerminator trials_111
  Routine pausa
  LoopInitiator trials_35 loopType="TrialHandler"
    conditionsFile = stims/s8.xlsx
    loopType = sequential
    nReps = 1
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    Routine s8
  LoopTerminator trials_35
  LoopInitiator trials_62 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns8.xlsx
    loopType = sequential
    nReps = 1
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    Routine q8
    Routine fb8
  LoopTerminator trials_62
  Routine pausa
  LoopInitiator trials_87 loopType="TrialHandler"
    conditionsFile = Fillers_single/F16.xlsx
    loopType = sequential
    nReps = 1
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    Routine f16
  LoopTerminator trials_87
  LoopInitiator trials_112 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns16.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf16
    Routine fbf16
  LoopTerminator trials_112
  Routine FIN_BLOQUE
  Routine continuar_exp
  Routine pausa
  LoopInitiator trials_36 loopType="TrialHandler"
    conditionsFile = stims/s17.xlsx
    loopType = sequential
    nReps = 1
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    Routine s17
  LoopTerminator trials_36
  LoopInitiator trials_63 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns17.xlsx
    loopType = sequential
    nReps = 1
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    Routine q17
    Routine fb17
  LoopTerminator trials_63
  Routine pausa
  LoopInitiator trials_88 loopType="TrialHandler"
    conditionsFile = Fillers_single/F17.xlsx
    loopType = sequential
    nReps = 1
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    Routine f17
  LoopTerminator trials_88
  LoopInitiator trials_113 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns17.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf17
    Routine fbf17
  LoopTerminator trials_113
  Routine pausa
  LoopInitiator trials_37 loopType="TrialHandler"
    conditionsFile = stims/s26.xlsx
    loopType = sequential
    nReps = 1
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    Routine s26
  LoopTerminator trials_37
  LoopInitiator trials_64 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns26.xlsx
    loopType = sequential
    nReps = 1
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    Routine q26
    Routine fb26
  LoopTerminator trials_64
  Routine pausa
  LoopInitiator trials_89 loopType="TrialHandler"
    conditionsFile = Fillers_single/F18.xlsx
    loopType = sequential
    nReps = 1
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    Routine f18
  LoopTerminator trials_89
  LoopInitiator trials_114 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns18.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf18
    Routine fbf18
  LoopTerminator trials_114
  Routine pausa
  LoopInitiator trials_38 loopType="TrialHandler"
    conditionsFile = stims/s3.xlsx
    loopType = sequential
    nReps = 1
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    Routine s3
  LoopTerminator trials_38
  LoopInitiator trials_65 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns3.xlsx
    loopType = sequential
    nReps = 1
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    Routine q3
    Routine fb3
  LoopTerminator trials_65
  Routine pausa
  LoopInitiator trials_90 loopType="TrialHandler"
    conditionsFile = Fillers_single/F19.xlsx
    loopType = sequential
    nReps = 1
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    Routine f19
  LoopTerminator trials_90
  LoopInitiator trials_115 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns19.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf19
    Routine fbf19
  LoopTerminator trials_115
  Routine pausa
  LoopInitiator trials_39 loopType="TrialHandler"
    conditionsFile = stims/s12.xlsx
    loopType = sequential
    nReps = 1
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    Routine s12
  LoopTerminator trials_39
  LoopInitiator trials_66 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns12.xlsx
    loopType = sequential
    nReps = 1
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    Routine q12
    Routine fb12
  LoopTerminator trials_66
  Routine pausa
  LoopInitiator trials_91 loopType="TrialHandler"
    conditionsFile = Fillers_single/F20.xlsx
    loopType = sequential
    nReps = 1
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    Routine f20
  LoopTerminator trials_91
  LoopInitiator trials_116 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns20.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf20
    Routine fbf20
  LoopTerminator trials_116
  Routine pausa
  LoopInitiator trials_40 loopType="TrialHandler"
    conditionsFile = stims/s21.xlsx
    loopType = sequential
    nReps = 1
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    Routine s21
  LoopTerminator trials_40
  LoopInitiator trials_67 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns21.xlsx
    loopType = sequential
    nReps = 1
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    Routine q21
    Routine fb21
  LoopTerminator trials_67
  Routine pausa
  LoopInitiator trials_92 loopType="TrialHandler"
    conditionsFile = Fillers_single/F21.xlsx
    loopType = sequential
    nReps = 1
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    Routine f21
  LoopTerminator trials_92
  LoopInitiator trials_117 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns21.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf21
    Routine fbf21
  LoopTerminator trials_117
  Routine pausa
  LoopInitiator trials_41 loopType="TrialHandler"
    conditionsFile = stims/s30.xlsx
    loopType = sequential
    nReps = 1
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    Routine s30
  LoopTerminator trials_41
  LoopInitiator trials_68 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns30.xlsx
    loopType = sequential
    nReps = 1
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    Routine q30
    Routine fb30
  LoopTerminator trials_68
  Routine pausa
  LoopInitiator trials_93 loopType="TrialHandler"
    conditionsFile = Fillers_single/F22.xlsx
    loopType = sequential
    nReps = 1
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    Routine f22
  LoopTerminator trials_93
  LoopInitiator trials_118 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns22.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf22
    Routine fbf22
  LoopTerminator trials_118
  Routine pausa
  LoopInitiator trials_42 loopType="TrialHandler"
    conditionsFile = stims/s7.xlsx
    loopType = sequential
    nReps = 1
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    Routine s7
  LoopTerminator trials_42
  LoopInitiator trials_69 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns7.xlsx
    loopType = sequential
    nReps = 1
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    Routine q7
    Routine fb7
  LoopTerminator trials_69
  Routine pausa
  LoopInitiator trials_94 loopType="TrialHandler"
    conditionsFile = Fillers_single/F23.xlsx
    loopType = sequential
    nReps = 1
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    Routine f23
  LoopTerminator trials_94
  LoopInitiator trials_119 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns23.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf23
    Routine fbf23
  LoopTerminator trials_119
  Routine pausa
  LoopInitiator trials_43 loopType="TrialHandler"
    conditionsFile = stims/s16.xlsx
    loopType = sequential
    nReps = 1
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    Routine s16
  LoopTerminator trials_43
  LoopInitiator trials_70 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns16.xlsx
    loopType = sequential
    nReps = 1
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    Routine q16
    Routine fb16
  LoopTerminator trials_70
  Routine pausa
  LoopInitiator trials_95 loopType="TrialHandler"
    conditionsFile = Fillers_single/F24.xlsx
    loopType = sequential
    nReps = 1
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    Routine f24
  LoopTerminator trials_95
  LoopInitiator trials_120 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns24.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf24
    Routine fbf24
  LoopTerminator trials_120
  Routine FIN_BLOQUE
  Routine continuar_exp
  Routine pausa
  LoopInitiator trials_44 loopType="TrialHandler"
    conditionsFile = stims/s25.xlsx
    loopType = sequential
    nReps = 1
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    Routine s25
  LoopTerminator trials_44
  LoopInitiator trials_71 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns25.xlsx
    loopType = sequential
    nReps = 1
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    Routine q25
    Routine fb25
  LoopTerminator trials_71
  Routine pausa
  LoopInitiator trials_96 loopType="TrialHandler"
    conditionsFile = Fillers_single/F25.xlsx
    loopType = sequential
    nReps = 1
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    Routine f25
  LoopTerminator trials_96
  LoopInitiator trials_121 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns25.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf25
    Routine fbf25
  LoopTerminator trials_121
  Routine pausa
  LoopInitiator trials_45 loopType="TrialHandler"
    conditionsFile = stims/s2.xlsx
    loopType = sequential
    nReps = 1
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    Routine s2
  LoopTerminator trials_45
  LoopInitiator trials_72 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns2.xlsx
    loopType = sequential
    nReps = 1
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    Routine q2
    Routine fb2
  LoopTerminator trials_72
  Routine pausa
  LoopInitiator trials_97 loopType="TrialHandler"
    conditionsFile = Fillers_single/F26.xlsx
    loopType = sequential
    nReps = 1
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    Routine f26
  LoopTerminator trials_97
  LoopInitiator trials_122 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns26.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf26
    Routine fbf26
  LoopTerminator trials_122
  Routine pausa
  LoopInitiator trials_46 loopType="TrialHandler"
    conditionsFile = stims/s11.xlsx
    loopType = sequential
    nReps = 1
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    Routine s11
  LoopTerminator trials_46
  LoopInitiator trials_73 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns11.xlsx
    loopType = sequential
    nReps = 1
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    Routine q11
    Routine fb11
  LoopTerminator trials_73
  Routine pausa
  LoopInitiator trials_98 loopType="TrialHandler"
    conditionsFile = Fillers_single/F27.xlsx
    loopType = sequential
    nReps = 1
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    Routine f27
  LoopTerminator trials_98
  LoopInitiator trials_123 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns27.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf27
    Routine fbf27
  LoopTerminator trials_123
  Routine pausa
  LoopInitiator trials_47 loopType="TrialHandler"
    conditionsFile = stims/s20.xlsx
    loopType = sequential
    nReps = 1
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    Routine s20
  LoopTerminator trials_47
  LoopInitiator trials_74 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns20.xlsx
    loopType = sequential
    nReps = 1
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    Routine q20
    Routine fb20
  LoopTerminator trials_74
  Routine pausa
  LoopInitiator trials_99 loopType="TrialHandler"
    conditionsFile = Fillers_single/F28.xlsx
    loopType = sequential
    nReps = 1
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    Routine f28
  LoopTerminator trials_99
  LoopInitiator trials_124 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns28.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf28
    Routine fbf28
  LoopTerminator trials_124
  Routine pausa
  LoopInitiator trials_48 loopType="TrialHandler"
    conditionsFile = stims/s29.xlsx
    loopType = sequential
    nReps = 1
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    Routine s29
  LoopTerminator trials_48
  LoopInitiator trials_75 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns29.xlsx
    loopType = sequential
    nReps = 1
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    Routine q29
    Routine fb29
  LoopTerminator trials_75
  Routine pausa
  LoopInitiator trials_100 loopType="TrialHandler"
    conditionsFile = Fillers_single/F29.xlsx
    loopType = sequential
    nReps = 1
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    Routine f29
  LoopTerminator trials_100
  LoopInitiator trials_125 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns29.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf29
    Routine fbf29
  LoopTerminator trials_125
  Routine pausa
  LoopInitiator trials_49 loopType="TrialHandler"
    conditionsFile = stims/s6.xlsx
    loopType = sequential
    nReps = 1
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    Routine s6
  LoopTerminator trials_49
  LoopInitiator trials_76 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns6.xlsx
    loopType = sequential
    nReps = 1
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    Routine q6
    Routine fb6
  LoopTerminator trials_76
  Routine pausa
  LoopInitiator trials_101 loopType="TrialHandler"
    conditionsFile = Fillers_single/F30.xlsx
    loopType = sequential
    nReps = 1
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    Routine f30
  LoopTerminator trials_101
  LoopInitiator trials_126 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns30.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf30
    Routine fbf30
  LoopTerminator trials_126
  Routine pausa
  LoopInitiator trials_50 loopType="TrialHandler"
    conditionsFile = stims/s15.xlsx
    loopType = sequential
    nReps = 1
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    Routine s15
  LoopTerminator trials_50
  LoopInitiator trials_77 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns15.xlsx
    loopType = sequential
    nReps = 1
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    Routine q15
    Routine fb15
  LoopTerminator trials_77
  Routine pausa
  LoopInitiator trials_102 loopType="TrialHandler"
    conditionsFile = Fillers_single/F31.xlsx
    loopType = sequential
    nReps = 1
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    Routine f31
  LoopTerminator trials_102
  LoopInitiator trials_127 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns31.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf31
    Routine fbf31
  LoopTerminator trials_127
  Routine pausa
  LoopInitiator trials_51 loopType="TrialHandler"
    conditionsFile = stims/s24.xlsx
    loopType = sequential
    nReps = 1
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    Routine s24
  LoopTerminator trials_51
  LoopInitiator trials_78 loopType="TrialHandler"
    conditionsFile = corrAns/corrAns24.xlsx
    loopType = sequential
    nReps = 1
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    Routine q24
    Routine fb24
  LoopTerminator trials_78
  Routine pausa
  LoopInitiator trials_103 loopType="TrialHandler"
    conditionsFile = Fillers_single/F32.xlsx
    loopType = sequential
    nReps = 1
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    Routine f32
  LoopTerminator trials_103
  LoopInitiator trials_128 loopType="TrialHandler"
    conditionsFile = corrAns_filler/corrAns32.xlsx
    loopType = sequential
    nReps = 1
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    Routine qf32
    Routine fbf32
  LoopTerminator trials_128
  Routine end_exp
